PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 0.0588, 0.6157, 0.9608
  expName = continuous_performance_test
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to attend to the presented letter stimuli. Press space after every letter stimulus except from letter X. If you see X please do not respond. Reaction time is measured so please respond as quickly as possible. Press space to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent letter_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $letter
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    KeyboardComponent response
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      storeCorrect = True
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    TextComponent trial_counter
      letterHeight = 0.05
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $str(trials.thisN) + '/' + str(trials.nTotal)
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    CodeComponent track_correct
      Code Type = Auto->JS
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      Begin Experiment:
        correct_counter = 0
      End Routine:
        if response.keys and corrAns == 'space':
            correct_counter += 1
        if not response.keys and corrAns != 'space':
            correct_counter += 1
  Routine End
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You scored ' + str(correct_counter) + '/' + str(trials.nTotal) + ' correct!'
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'letter': 'A', 'corrAns': 'space'},
      {'letter': 'B', 'corrAns': 'space'},
      {'letter': 'C', 'corrAns': 'space'},
      {'letter': 'D', 'corrAns': 'space'},
      {'letter': 'E', 'corrAns': 'space'},
      {'letter': 'F', 'corrAns': 'space'},
      {'letter': 'G', 'corrAns': 'space'},
      {'letter': 'H', 'corrAns': 'space'},
      {'letter': 'I', 'corrAns': 'space'},
      {'letter': 'J', 'corrAns': 'space'},
      {'letter': 'K', 'corrAns': 'space'},
      {'letter': 'L', 'corrAns': 'space'},
      {'letter': 'M', 'corrAns': 'space'},
      {'letter': 'N', 'corrAns': 'space'},
      {'letter': 'O', 'corrAns': 'space'},
      {'letter': 'P', 'corrAns': 'space'},
      {'letter': 'Q', 'corrAns': 'space'},
      {'letter': 'R', 'corrAns': 'space'},
      {'letter': 'S', 'corrAns': 'space'},
      {'letter': 'T', 'corrAns': 'space'},
      {'letter': 'U', 'corrAns': 'space'},
      {'letter': 'V', 'corrAns': 'space'},
      {'letter': 'W', 'corrAns': 'space'},
      {'letter': 'Y', 'corrAns': 'space'},
      {'letter': 'Z', 'corrAns': 'space'},
      {'letter': 'X', 'corrAns': None},
      {'letter': 'X', 'corrAns': None},
      {'letter': 'X', 'corrAns': None},
      {'letter': 'X', 'corrAns': None},
      {'letter': 'X', 'corrAns': None}]
    Routine Trial
  LoopTerminator trials
  Routine End
